<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q2="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="NestedWorkflow">
        <Name>Image process_ROI</Name>
        <Description>Image processing</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:FindContours">
                <q1:Mode>External</q1:Mode>
                <q1:Method>ChainApproxNone</q1:Method>
                <q1:Offset>
                  <q1:X>0</q1:X>
                  <q1:Y>0</q1:Y>
                </q1:Offset>
                <q1:MinArea>2000</q1:MinArea>
                <q1:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Threshold">
                <q1:ThresholdValue>40</q1:ThresholdValue>
                <q1:MaxValue>255</q1:MaxValue>
                <q1:ThresholdType>BinaryInv</q1:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:MorphologicalOperator">
                <q1:Size>
                  <q1:Width>8</q1:Width>
                  <q1:Height>8</q1:Height>
                </q1:Size>
                <q1:Anchor>
                  <q1:X>1</q1:X>
                  <q1:Y>1</q1:Y>
                </q1:Anchor>
                <q1:Shape>Ellipse</q1:Shape>
                <q1:Iterations>1</q1:Iterations>
                <q1:Operation>Close</q1:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Crop">
                <q1:RegionOfInterest>
                  <q1:X>36</q1:X>
                  <q1:Y>82</q1:Y>
                  <q1:Width>288</q1:Width>
                  <q1:Height>280</q1:Height>
                </q1:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Write Raw Centroid Data</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="q2:CsvWriter">
              <q2:FileName>RTPP_RawData.csv</q2:FileName>
              <q2:Append>false</q2:Append>
              <q2:Overwrite>false</q2:Overwrite>
              <q2:Suffix>FileCount</q2:Suffix>
              <q2:IncludeHeader>true</q2:IncludeHeader>
              <q2:Selector />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Centroid.X</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Centroid.Y</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>Elapsed time</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Take">
                      <Count>1</Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.TotalSeconds</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>5</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>5</To>
              <Label>Source3</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CameraCapture">
          <q1:Index>0</q1:Index>
          <q1:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Image process_Raw</Name>
        <Description>Image processing</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:FindContours">
                <q1:Mode>External</q1:Mode>
                <q1:Method>ChainApproxNone</q1:Method>
                <q1:Offset>
                  <q1:X>0</q1:X>
                  <q1:Y>0</q1:Y>
                </q1:Offset>
                <q1:MinArea>2000</q1:MinArea>
                <q1:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Threshold">
                <q1:ThresholdValue>40</q1:ThresholdValue>
                <q1:MaxValue>255</q1:MaxValue>
                <q1:ThresholdType>BinaryInv</q1:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:MorphologicalOperator">
                <q1:Size>
                  <q1:Width>8</q1:Width>
                  <q1:Height>8</q1:Height>
                </q1:Size>
                <q1:Anchor>
                  <q1:X>1</q1:X>
                  <q1:Y>1</q1:Y>
                </q1:Anchor>
                <q1:Shape>Ellipse</q1:Shape>
                <q1:Iterations>1</q1:Iterations>
                <q1:Operation>Close</q1:Operation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Grayscale" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Crop">
                <q1:RegionOfInterest>
                  <q1:X>36</q1:X>
                  <q1:Y>82</q1:Y>
                  <q1:Width>580</q1:Width>
                  <q1:Height>280</q1:Height>
                </q1:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>8</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timer">
          <DueTime>PT10M</DueTime>
          <Period>PT0S</Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>Write ROI data</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="q2:CsvWriter">
              <q2:FileName>RTPP_ROIdata.csv</q2:FileName>
              <q2:Append>false</q2:Append>
              <q2:Overwrite>false</q2:Overwrite>
              <q2:Suffix>FileCount</q2:Suffix>
              <q2:IncludeHeader>true</q2:IncludeHeader>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Source.TotalSeconds</Selector>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Source.Centroid.X</Selector>
            </Expression>
            <Expression xsi:type="NestedWorkflow">
              <Name>Elapsed time</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Take">
                      <Count>1</Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Source.Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="Timestamp" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge>
                    <From>0</From>
                    <To>6</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>1</From>
                    <To>0</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>2</From>
                    <To>1</To>
                    <Label>Source2</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>1</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>3</From>
                    <To>2</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>4</From>
                    <To>3</To>
                    <Label>Source1</Label>
                  </Edge>
                  <Edge>
                    <From>5</From>
                    <To>4</To>
                    <Label>Source1</Label>
                  </Edge>
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="Zip" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>4</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>6</To>
              <Label>Source2</Label>
            </Edge>
            <Edge>
              <From>5</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="NestedWorkflow">
        <Name>Write Video File</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:VideoWriter">
                <q1:FileName>RTPP.avi</q1:FileName>
                <q1:Suffix>FileCount</q1:Suffix>
                <q1:Buffered>true</q1:Buffered>
                <q1:Overwrite>false</q1:Overwrite>
                <q1:FourCC>FMP4</q1:FourCC>
                <q1:FrameRate>30</q1:FrameRate>
                <q1:FrameSize>
                  <q1:Width>0</q1:Width>
                  <q1:Height>0</q1:Height>
                </q1:FrameSize>
                <q1:ResizeInterpolation>NearestNeighbor</q1:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>1</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Threshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.MorphologicalOperator, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Crop, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.SubtractBuilder, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Take, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.CameraCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timer, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>