CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<WellAlpha>[A-P]{1}) - (?P<WellNum>[0-9]{1,2})\(fld (?P<Field>[0-9]{1,2}) wv (?P<Ex>.*) - (?P<Em>.*)\).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "syp")
    Name to assign these images:SYP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "gfp")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "overlay")
    Name to assign these images:overlay
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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notes:['enhance GFP image sharpness']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
    Select the input image:GFP
    Name the output image:GFPEnhanced
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:6|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notes:['identify whole GFP positive regions']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
    Select the input image:GFPEnhanced
    Name the primary objects to be identified:PrimaryGFP
    Typical diameter of objects, in pixel units (Min,Max):3,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:7|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notes:['convert objects to a image format']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
    Select the input objects:PrimaryGFP
    Name the output image:FinalGFP_Image
    Select the color format:Binary (black & white)
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
EnhanceOrSuppressFeatures:[module_num:8|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notes:['enhance SYP image sharpness']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
    Select the input image:SYP
    Name the output image:SYPEnhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow

Threshold:[module_num:9|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notes:['Threshold SYP image']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
    Select the input image:SYPEnhanced
    Name the output image:SYPThreshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:10|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notes:['identify SYP puncta']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
    Select the input image:SYPThreshold
    Name the primary objects to be identified:PrimarySYP
    Typical diameter of objects, in pixel units (Min,Max):2,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:7
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

OverlayOutlines:[module_num:11|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notes:['overlay identified SYP puncta onto original SYP image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:SYP
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:PrimarySYP

MaskObjects:[module_num:12|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notes:['apply processed final GFP image mask onto identified SYP']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
    Select objects to be masked:PrimarySYP
    Name the masked objects:FinalSYPonGFP
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:FinalGFP_Image
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:13|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notes:['visualize final identified regions onto the original overlay image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:overlay
    Name the output image:Overlay_SYPonGFP
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#0F1AFE
    Select objects to display:PrimarySYP
    Select outline color:#FB38EB
    Select objects to display:FinalSYPonGFP
    Select outline color:#6DFAF3
    Select objects to display:PrimaryGFP

MeasureImageAreaOccupied:[module_num:14|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:FinalGFP_Image
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:FinalSYPonGFP
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Google Drive/Lab work_Ginty lab/Manuscript/short format/Nature/revision/PBN postsynaptic target/quant output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:PrimarySYP|Number_Object_Number,PrimarySYP|Location_Center_Y,PrimarySYP|Location_Center_X,PrimarySYP|Location_Center_Z,FinalSYPonGFP|Parent_PrimarySYP,FinalSYPonGFP|Location_Center_Y,FinalSYPonGFP|Location_Center_X,Image|AreaOccupied_Perimeter_FinalSYPonGFP,Image|AreaOccupied_Perimeter_FinalGFP_Image,Image|AreaOccupied_AreaOccupied_FinalSYPonGFP,Image|AreaOccupied_AreaOccupied_FinalGFP_Image,Image|AreaOccupied_TotalArea_FinalGFP_Image,Image|AreaOccupied_TotalArea_FinalSYPonGFP,PrimaryGFP|Number_Object_Number,PrimaryGFP|Location_Center_Y,PrimaryGFP|Location_Center_X,PrimaryGFP|Location_Center_Z
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:quant_
    Overwrite existing files without warning?:No
    Data to export:FinalSYPonGFP
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:PrimarySYP
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
